PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = variables
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image
      disabled = True
      image [set every repeat] = $which_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      disabled = True
      image = cat1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        cats = ['cat1.jpg', 'cat2.jpg', 'cat3.jpg']
        i = 0
      Begin Routine:
        this_cat = cats[i]
      End Routine:
        i = i + 1
    ImageComponent image_3
      image [set every repeat] = $this_cat
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      pos = (-.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $this_cat
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'which_image': 'cat1.jpg'}]
    conditionsFile = loop1.xlsx
    loopType = random
    nReps = 3
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    Routine trial
  LoopTerminator trials
